# Generated by Configurator on Fri May 25 17:36:21 BST 2012

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,TIScope,NikonTI,TIScope
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TILightPath,NikonTI,TILightPath
Device,OptoLED,CairnNI6501,CairnNI6501
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort
Device,FreeSerialPort-1,FreeSerialPort,FreeSerialPort
Device,Andor,Andor,Andor

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,19200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM2,AnswerTimeout,2000
Property,COM2,BaudRate,19200
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,1
Property,FreeSerialPort,Port,COM1
Property,FreeSerialPort-1,Port,COM2
Property,Andor,Camera,| iXon Ultra | DU897_BV | 6893 |

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,OptoLED
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TIFilterBlock1
Label,TIFilterBlock1,5,6 - Empty
Label,TIFilterBlock1,4,5 - Empty
Label,TIFilterBlock1,3,4 - YFP and mCherry
Label,TIFilterBlock1,2,3 - mCherry
Label,TIFilterBlock1,1,2 - YFP
Label,TIFilterBlock1,0,1 - GFP
# TILightPath
Label,TILightPath,3,Left80
Label,TILightPath,2,Right100
Label,TILightPath,1,Left100
Label,TILightPath,0,Eye100

# Configuration presets
# Group: Gain
# Preset: NewPreset
ConfigGroup,Gain,NewPreset,Andor,Gain,569


# Group: Channel
# Preset: YFP + Blue
ConfigGroup,Channel,YFP + Blue,TIFilterBlock1,Label,2 - YFP
ConfigGroup,Channel,YFP + Blue,TIFilterBlock1,State,1
ConfigGroup,Channel,YFP + Blue,OptoLED,Direct Digital Out 0,0
ConfigGroup,Channel,YFP + Blue,OptoLED,Direct Digital Out 1,1
ConfigGroup,Channel,YFP + Blue,OptoLED,Direct Digital Out 2,1
ConfigGroup,Channel,YFP + Blue,OptoLED,Direct Digital Out 3,0
ConfigGroup,Channel,YFP + Blue,OptoLED,Shutter,1

# Preset: YFP
ConfigGroup,Channel,YFP,OptoLED,Direct Digital Out 0,0
ConfigGroup,Channel,YFP,OptoLED,Direct Digital Out 1,0
ConfigGroup,Channel,YFP,OptoLED,Direct Digital Out 2,1
ConfigGroup,Channel,YFP,OptoLED,Direct Digital Out 3,0
ConfigGroup,Channel,YFP,OptoLED,Shutter,1
ConfigGroup,Channel,YFP,TIFilterBlock1,Label,2 - YFP
ConfigGroup,Channel,YFP,TIFilterBlock1,State,1

# Preset: GFP or CFP
ConfigGroup,Channel,GFP or CFP,OptoLED,Direct Digital Out 0,0
ConfigGroup,Channel,GFP or CFP,OptoLED,Direct Digital Out 1,1
ConfigGroup,Channel,GFP or CFP,OptoLED,Direct Digital Out 2,0
ConfigGroup,Channel,GFP or CFP,OptoLED,Direct Digital Out 3,0
ConfigGroup,Channel,GFP or CFP,OptoLED,Shutter,1
ConfigGroup,Channel,GFP or CFP,TIFilterBlock1,Label,1 - GFP
ConfigGroup,Channel,GFP or CFP,TIFilterBlock1,State,0

# Preset: mCherry
ConfigGroup,Channel,mCherry,OptoLED,Direct Digital Out 0,0
ConfigGroup,Channel,mCherry,OptoLED,Direct Digital Out 1,0
ConfigGroup,Channel,mCherry,OptoLED,Direct Digital Out 2,0
ConfigGroup,Channel,mCherry,OptoLED,Direct Digital Out 3,1
ConfigGroup,Channel,mCherry,OptoLED,Shutter,1
ConfigGroup,Channel,mCherry,TIFilterBlock1,Label,3 - mCherry
ConfigGroup,Channel,mCherry,TIFilterBlock1,State,2

# Preset: Transmitted
ConfigGroup,Channel,Transmitted,OptoLED,Direct Digital Out 0,1
ConfigGroup,Channel,Transmitted,OptoLED,Direct Digital Out 1,0
ConfigGroup,Channel,Transmitted,OptoLED,Direct Digital Out 2,0
ConfigGroup,Channel,Transmitted,OptoLED,Direct Digital Out 3,0
ConfigGroup,Channel,Transmitted,OptoLED,Shutter,1
ConfigGroup,Channel,Transmitted,TIFilterBlock1,Label,6 - Empty
ConfigGroup,Channel,Transmitted,TIFilterBlock1,State,5


# Group: Blue light
# Preset: 1
ConfigGroup,Blue light,1,OptoLED,Direct Digital Out 1,1

# Preset: 0
ConfigGroup,Blue light,0,OptoLED,Direct Digital Out 1,0


# Group: Andow-Internal Shutter
# Preset: Open
ConfigGroup,Andow-Internal Shutter,Open,Andor,InternalShutter,Open

# Preset: Closed
ConfigGroup,Andow-Internal Shutter,Closed,Andor,InternalShutter,Closed


# Group: Exposure
# Preset: BF
ConfigGroup,Exposure,BF,Andor,EMSwitch,Off
ConfigGroup,Exposure,BF,Andor,Exposure,10.0000
ConfigGroup,Exposure,BF,Andor,Gain,4

# Preset: Fluo
ConfigGroup,Exposure,Fluo,Andor,EMSwitch,On
ConfigGroup,Exposure,Fluo,Andor,Exposure,100.0000
ConfigGroup,Exposure,Fluo,Andor,Gain,500



# PixelSize settings

